PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine bye
    TextComponent byeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating!
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  Routine intro
    TextComponent instructionText
      letterHeight = 0.045
      startVal [time (s)] = 0.5
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      text:
        Example of instruction text here.

        Press 'y' key to proceed.

        Press 'n' key to exit.
    KeyboardComponent inst_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent introCode
      Code Type = Auto->JS
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      End Routine:
        if inst_resp.keys == 'y':
            consentReps = 1
            skip_consent = False
            skip_stimuli = False
        elif inst_resp.keys == 'n':
            skip_consent = True
            skip_stimuli = True
  Routine consent
    TextComponent consentText
      letterHeight = 0.045
      startVal [time (s)] = 0.5
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      text:
        Read consent form presented below.
        By pressing 'y' key, you agree to the consent form.

        Press 'n' if you disagree with the consent form then the experiment will be finished.
    KeyboardComponent consRes
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent consentCode
      Code Type = Auto->JS
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      Begin Routine:
        if skip_consent:
            continueRoutine = False
      End Routine:
        if consRes.keys == 'y':
            stimuliReps = 1
        elif consRes.keys == 'n':
            skip_stimuli = True
  Routine stimuli
    TextComponent stimuliText
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = 'strongly disagree', 'disagree', 'neutral', 'agree', 'strongly agree'
      letterHeight = 0.02
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent rateText
      color = 1.0000, 1.0000, -0.1294
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.5
      text = Rate how much blame should the agent receive?
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    CodeComponent stimuliCode
      Code Type = Auto->JS
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      Begin Routine:
        if skip_stimuli:
            continueRoutine = False
Flow
  Routine intro
  LoopInitiator consentloop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine consent
  LoopTerminator consentloop
  LoopInitiator stimuliloop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'num': 1, 'text': 'example stimuli 1'},
      {'num': 2, 'text': 'example stimuli 2'},
      {'num': 3, 'text': 'example stimuli 3'},
      {'num': 4, 'text': 'example stimuli 4'},
      {'num': 5, 'text': 'example stimuli 5'}]
    Routine stimuli
  LoopTerminator stimuliloop
  Routine bye
